private function A_UserInput(  ) void ;
private function B_CreateSequences(  ) void ;
private function C_LoadInstructions(  ) void ;
private function D_PipettingSteps(  ) void ;
private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable ;
private function _GetLabwareParameters( sequence i_seq, variable & o_arr[] ) void ;
private function _GetPipelineVariables( variable i_strConfigFilePath, variable i_strPipeline ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_UserInput(  ) void {
  private variable rtnValue;
  private variable loopCounter1;
  private dialog customDialog_1;
  private variable _;
  private variable blnMethodDetails;
  private variable blnDetails_Step7;
  private variable blnDetails_Step8;
  private variable blnDetails_Step9;
  private variable blnDetails_Step1;
  private variable blnDetails_Step10;
  private variable blnDetails_Step2;
  private variable blnDetails_Step11;
  private variable blnDetails_Step3;
  private variable blnDetails_Step4;
  private variable blnDetails_Step5;
  private variable blnDetails_Step6;
  private variable strDispDetail_4;
  private variable strAspDetail_3;
  private variable strAspDetail_4;
  private variable strDetail_1;
  private variable strDetail_2;
  private variable strDetail_3;
  private variable strDispDetail_1;
  private variable strDispDetail_2;
  private variable strAspDetail_1;
  private variable strDispDetail_3;
  private variable strAspDetail_2;
  private dialog customDialog_2;
  private variable intTraceLevel;
  private dialog customDialog_3;
  private variable arrAvailablePipelineSteps[];
  private dialog customDialog_4;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                     USER INPUT: START\n**************************************************************************************************************************"));
  intSourcePlateNumber = 2;
  blnSimMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  intTraceLevel = TRACE_LEVEL_DEBUG;
  TRACELEVEL::SetTraceLevel(intTraceLevel);
  strConfigFilePath = Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\GenericSPRI\\MethodConfig.json");
  arrAvailablePipelineSteps.SetSize(0);
  JSONSEARCH::GetJSONEntry(strConfigFilePath, Translate("Approved_Pipelines"), intTraceLevel, arrAvailablePipelineSteps, _);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrAvailablePipelineSteps );
      customDialog_4.SetCustomDialogProperty( "comboBox1.SelectedIndex", intPipelineChoice );
      customDialog_4.ShowCustomDialog();
      rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      intPipelineChoice = customDialog_4.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      if (rtnValue == 2)
      {
        abort;
      }
      _GetPipelineVariables(strConfigFilePath, arrAvailablePipelineSteps.ElementAt( intPipelineChoice -1));
      if (blnMethodDetails == 1)
      {
        blnDetails_Step1 = 1;
        {
          loopCounter1 = 0;
          while (1 == 1)
          {
            loopCounter1 = loopCounter1 + 1;
            customDialog_2.InitCustomDialog("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");
            customDialog_2.SetCustomDialogProperty( "radioButton1.IsChecked", blnDetails_Step1 );
            customDialog_2.SetCustomDialogProperty( "radioButton2.IsChecked", blnDetails_Step2 );
            customDialog_2.SetCustomDialogProperty( "radioButton3.IsChecked", blnDetails_Step3 );
            customDialog_2.SetCustomDialogProperty( "radioButton4.IsChecked", blnDetails_Step4 );
            customDialog_2.SetCustomDialogProperty( "radioButton5.IsChecked", blnDetails_Step5 );
            customDialog_2.SetCustomDialogProperty( "radioButton6.IsChecked", blnDetails_Step6 );
            customDialog_2.SetCustomDialogProperty( "radioButton7.IsChecked", blnDetails_Step7 );
            customDialog_2.SetCustomDialogProperty( "radioButton8.IsChecked", blnDetails_Step8 );
            customDialog_2.SetCustomDialogProperty( "radioButton9.IsChecked", blnDetails_Step9 );
            customDialog_2.SetCustomDialogProperty( "radioButton10.IsChecked", blnDetails_Step10 );
            customDialog_2.SetCustomDialogProperty( "radioButton11.IsChecked", blnDetails_Step11 );
            customDialog_2.SetCustomDialogProperty( "textBlock2.Text", strDetail_1 );
            customDialog_2.SetCustomDialogProperty( "textBlock3.Text", strDetail_2 );
            customDialog_2.SetCustomDialogProperty( "textBlock4.Text", strDetail_3 );
            customDialog_2.SetCustomDialogProperty( "textBlock5.Text", strAspDetail_1 );
            customDialog_2.SetCustomDialogProperty( "textBlock6.Text", strAspDetail_2 );
            customDialog_2.SetCustomDialogProperty( "textBlock7.Text", strAspDetail_3 );
            customDialog_2.SetCustomDialogProperty( "textBlock8.Text", strAspDetail_4 );
            customDialog_2.SetCustomDialogProperty( "textBlock10.Text", strDispDetail_1 );
            customDialog_2.SetCustomDialogProperty( "textBlock11.Text", strDispDetail_2 );
            customDialog_2.SetCustomDialogProperty( "textBlock12.Text", strDispDetail_3 );
            customDialog_2.SetCustomDialogProperty( "textBlock13.Text", strDispDetail_4 );
            customDialog_2.ShowCustomDialog();
            rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
            blnDetails_Step1 = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
            blnDetails_Step2 = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
            blnDetails_Step3 = customDialog_2.GetCustomDialogProperty( "radioButton3.IsChecked" );
            blnDetails_Step4 = customDialog_2.GetCustomDialogProperty( "radioButton4.IsChecked" );
            blnDetails_Step5 = customDialog_2.GetCustomDialogProperty( "radioButton5.IsChecked" );
            blnDetails_Step6 = customDialog_2.GetCustomDialogProperty( "radioButton6.IsChecked" );
            blnDetails_Step7 = customDialog_2.GetCustomDialogProperty( "radioButton7.IsChecked" );
            blnDetails_Step8 = customDialog_2.GetCustomDialogProperty( "radioButton8.IsChecked" );
            blnDetails_Step9 = customDialog_2.GetCustomDialogProperty( "radioButton9.IsChecked" );
            blnDetails_Step10 = customDialog_2.GetCustomDialogProperty( "radioButton10.IsChecked" );
            blnDetails_Step11 = customDialog_2.GetCustomDialogProperty( "radioButton11.IsChecked" );
            strDetail_1 = customDialog_2.GetCustomDialogProperty( "textBlock2.Text" );
            strDetail_2 = customDialog_2.GetCustomDialogProperty( "textBlock3.Text" );
            strDetail_3 = customDialog_2.GetCustomDialogProperty( "textBlock4.Text" );
            strAspDetail_1 = customDialog_2.GetCustomDialogProperty( "textBlock5.Text" );
            strAspDetail_2 = customDialog_2.GetCustomDialogProperty( "textBlock6.Text" );
            strAspDetail_3 = customDialog_2.GetCustomDialogProperty( "textBlock7.Text" );
            strAspDetail_4 = customDialog_2.GetCustomDialogProperty( "textBlock8.Text" );
            strDispDetail_1 = customDialog_2.GetCustomDialogProperty( "textBlock10.Text" );
            strDispDetail_2 = customDialog_2.GetCustomDialogProperty( "textBlock11.Text" );
            strDispDetail_3 = customDialog_2.GetCustomDialogProperty( "textBlock12.Text" );
            strDispDetail_4 = customDialog_2.GetCustomDialogProperty( "textBlock13.Text" );
            if (rtnValue == 2)
            {
              break;
            }
          }
        }
      }
      else
      {
        break;
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Pipeline step: "), arrAvailablePipelineSteps.ElementAt( intPipelineChoice -1));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> intSourcePlateNumber: "), intSourcePlateNumber);
}

private function C_LoadInstructions(  ) void {
  private variable intTipsNeeded;
  private variable intSeqCap;
  private variable strLoadMessage;
  private dialog customDialog_5;
  private variable rtnValue;
  private variable arrTransportSettings[];
  private dialog customDialog_6;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                LOAD INSTRUCTIONS: START\n**************************************************************************************************************************"));
  intSeqCap = intSourcePlateNumber * 96;
  seqPCR_SourcePlates.SetCount(intSeqCap);
  seqDWP_BindPlates.SetCount(intSeqCap);
  ML_STAR.PCR_DestinationPlates.SetCount(intSeqCap);
  ML_STAR.trp_BindPlates_Magnet.SetCount(intSourcePlateNumber);
  if (blnSourcePlateCleanup == 0)
  {
    strLoadMessage = StrConcat4(Translate("Please load the DNA plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqPCR_SourcePlates, strLoadMessage);
  }
  if (blnSourcePlateCleanup == 1)
  {
    strLoadMessage = StrConcat4(Translate("Please load the DNA plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
  }
  else
  {
    strLoadMessage = StrConcat4(Translate("Please load the bind plates"), Translate(""), Translate(" on the flashing position"), Translate(""));
  }
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqDWP_BindPlates, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), intSourcePlateNumber, Translate(" destination plates on the highlighted position(s)"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.PCR_DestinationPlates, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of ethanol"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Ethanol, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), Translate("150mL of elution buffer"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.res_Elution, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load a deep-well plate containing"), Translate("150uL per well of SPRI beads"), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqRes_BindingBeads, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load an empty waste reservoir"), Translate(""), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqWaste, strLoadMessage);
  strLoadMessage = StrConcat4(Translate("Please load "), intSourcePlateNumber, Translate(" destination plates on the highlighted position(s)"), Translate(""));
  strLoadMessage = StrConcat8(Translate("Please load "), intSourcePlateNumber, Translate(" "), strMagnetType, Translate(" magnets onto the highlighted position(s)"), Translate(""), Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.trp_BindPlates_Magnet, strLoadMessage);
  intTipsNeeded = intSourcePlateNumber * 480;
  strLoadMessage = StrConcat4(Translate("Please load the tips"), Translate(""), Translate(" on the flashing position"), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, seqTips, strLoadMessage);
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  rtnValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
}

private function D_PipettingSteps(  ) void {
  private timer tmrDNABind_Plate1;
  private timer tmrDNABind_Plate2;
  private timer tmrDNAPulldown_Plate1;
  private timer tmrDNAPulldown_Plate2;
  private variable strHHSDevice;
  private variable blnUSB;
  private variable blnSTAR;
  private variable rtnCode;
  private variable arrHHSDevices[];
  private variable intHHSNumber;
  private variable loopCounter1;
  private variable arrTransportSettings[];
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter6;
  private variable loopCounter7;
  private variable loopCounter5;
  private timer tmrDrying_Plate1;
  private timer tmrDrying_Plate2;
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                    PIPETTING STEPS: START\n**************************************************************************************************************************"));
  MECC::TraceComment(Translate("---------- HHS Modules ----------"));
  arrHHSDevices.SetSize(0);
  blnSTAR = 1;
  blnUSB = 1;
  HSLHamHeaterShaker::SetSimulation(blnSimMode);
  intHHSNumber = SeqGetTotal(seqTrp_BindOnHHS);
  if (blnSimMode == 0)
  {
    {
      for(loopCounter6 = 0; loopCounter6 < intHHSNumber;)
      {
        loopCounter6 = loopCounter6 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS"), loopCounter6);
        if (blnSTAR == 1)
        {
          rtnCode = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, loopCounter6, strHHSDevice);
          if (rtnCode != 0)
          {
            MECC::TraceComment(Translate("Error Encountered"));
            blnSTAR = 0;
          }
        }
        if (blnUSB == 1)
        {
          rtnCode = HSLHamHeaterShaker::CreateUsbDevice(loopCounter6, strHHSDevice);
          if (rtnCode != 0)
          {
            MECC::TraceComment(Translate("Error Encountered"));
            blnUSB = 0;
          }
        }
        if (blnSTAR == 0)
        {
          if (blnUSB == 0)
          {
            break;
          }
        }
        arrHHSDevices.AddAsLast(strHHSDevice);
      }
    }
  }
  else
  {
    {
      for(loopCounter7 = 0; loopCounter7 < intHHSNumber;)
      {
        loopCounter7 = loopCounter7 + 1;
        strHHSDevice = StrConcat2(Translate("devHHS"), loopCounter7);
        arrHHSDevices.AddAsLast(strHHSDevice);
      }
    }
  }
  MECC::TraceComment(Translate("========== Step 1-4. DNA+Bead Bind =========="));
  {
    for(loopCounter1 = 0; loopCounter1 < intSourcePlateNumber;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (blnBindOnHHS == 1)
      {
        HSLHamHeaterShaker::StartTempCtrl(arrHHSDevices.ElementAt( loopCounter1 -1), intBind_Temp, 0);
        TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started temperature control for HHS_"), loopCounter1, Translate(" at "), intBind_Temp, Translate("C"), Translate(""));
      }
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      MECC::TraceComment(Translate("========== Step 1. Transfer Eluate =========="));
      if (blnTopUp == 1)
      {
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (blnTopUp_Eject == 1)
        {
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        }
      }
      MECC::TraceComment(Translate("========== Step 2. Transfer Beads =========="));
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      if (blnBead_Eject == 1)
      {
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      }
      MECC::TraceComment(Translate("========== Step 3. Transfer DNA =========="));
      if (blnSourcePlateCleanup == 0)
      {
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
      else
      {
      }
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("========== Step 4. DNA Binding =========="));
      if (blnBindOnHHS == 1)
      {
        _GetLabwareParameters(seqTrp_BindPlates, arrTransportSettings);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        HSLHamHeaterShaker::StartShaker(arrHHSDevices.ElementAt( loopCounter1 -1), intBind_Shake);
      }
      if (loopCounter1 == 1)
      {
        if( 0 == tmrDNABind_Plate1.SetTimer(intDNABindTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter1 == 2)
        {
          if( 0 == tmrDNABind_Plate2.SetTimer(intDNABindTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate(">> Started 'DNA Binding Timer' #"), loopCounter1, Translate(" for "), intDNABindTime, Translate(" seconds"), Translate(""));
      if (blnBindOnHHS == 1)
      {
        SeqIncrement(seqTrp_BindPlates, 1);
        SeqIncrement(seqTrp_BindOnHHS, 1);
      }
      SeqIncrement(seqPCR_SourcePlates, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
    }
  }
  SeqResetSequenceIndexes(seqPCR_SourcePlates);
  SeqResetSequenceIndexes(seqDWP_BindPlates);
  if (blnBindOnHHS == 1)
  {
    SeqResetSequenceIndexes(seqTrp_BindPlates);
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  }
  MECC::TraceComment(Translate("========== Step 4. Bead Pulldown =========="));
  {
    for(loopCounter2 = 0; loopCounter2 < intSourcePlateNumber;)
    {
      loopCounter2 = loopCounter2 + 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> loopCounter2: "), loopCounter2);
      if (loopCounter2 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
        if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter2 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
          if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Move to Magnet -----"));
      _GetLabwareParameters(seqTrp_BindOnHHS, arrTransportSettings);
      if (blnBindOnHHS == 1)
      {
        MECC::TraceComment(Translate("----- Stop Shakers -----"));
        HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
        HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (loopCounter2 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
        if( 0 == tmrDNAPulldown_Plate1.SetTimer(intDNAPulldownTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter2 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate2.SetTimer(intDNAPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if (blnBindOnHHS == 1)
      {
        SeqIncrement(seqTrp_BindOnHHS, 1);
      }
      else
      {
        SeqIncrement(seqTrp_BindPlates, 1);
      }
      SeqIncrement(seqTrp_BindOnMagnet, 1);
    }
  }
  if (blnBindOnHHS == 1)
  {
    SeqResetSequenceIndexes(seqTrp_BindOnHHS);
  }
  else
  {
    SeqResetSequenceIndexes(seqTrp_BindOnMagnet);
  }
  SeqResetSequenceIndexes(seqTrp_BindPlates);
  MECC::TraceComment(Translate("========== Step 5-11. Wash & Elution =========="));
  {
    for(loopCounter3 = 0; loopCounter3 < intSourcePlateNumber;)
    {
      loopCounter3 = loopCounter3 + 1;
      MECC::TraceComment(Translate("========== Step 5. Remove Supernatant =========="));
      if (loopCounter3 == 1)
      {
        if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter3 == 2)
        {
          if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      MECC::TraceComment(Translate("----- Eject Tips -----"));
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("========== Step 6. Wash =========="));
      if (blnWashOnMagnet == 0)
      {
        _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
        MECC::TraceComment(Translate("----- Move to Home -----"));
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      {
        for(loopCounter5 = 0; loopCounter5 < intWashCycles;)
        {
          loopCounter5 = loopCounter5 + 1;
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      MECC::TraceComment(Translate("========== Step 7. Drying =========="));
      if (blnWashOnMagnet == 1)
      {
        _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
        if (blnDryOnDeck == 1)
        {
          MECC::TraceComment(Translate("----- Move to Home -----"));
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        if (blnDryOnHHS == 1)
        {
          MECC::TraceComment(Translate("----- Move to HHS -----"));
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        if (blnDryOnMagnet == 1)
        {
          MECC::TraceComment(Translate("----- No Action Required -----"));
        }
      }
      else
      {
        if (blnDryOnDeck == 1)
        {
          MECC::TraceComment(Translate("----- No Action Required -----"));
        }
        if (blnDryOnHHS == 1)
        {
          MECC::TraceComment(Translate("----- Move to HHS -----"));
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
        if (blnDryOnMagnet == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        }
      }
      if (loopCounter3 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #1"), Translate(""));
        if( 0 == tmrDrying_Plate1.SetTimer(intBeadDryingTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter3 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting Bead Drying Timer #2"), Translate(""));
          if( 0 == tmrDrying_Plate2.SetTimer(intBeadDryingTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("========== Step 8. Transfer Eluate =========="));
      if (loopCounter3 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #1"), Translate(""));
        if( 0 == tmrDrying_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter3 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Drying Timer #1"), Translate(""));
          if( 0 == tmrDrying_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
      if (blnDryOnHHS == 1)
      {
        HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
        HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      if (blnDryOnDeck == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      if (blnDryOnMagnet == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      if (blnEluateOnMagnet == 1)
      {
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      if (blnEluateOnMagnet == 1)
      {
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
      else
      {
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("========== Step 9. Incubation =========="));
      if (blnEluteOnHHS == 1)
      {
        _GetLabwareParameters(seqTrp_BindOnMagnet, arrTransportSettings);
        if (blnEluateOnMagnet == 1)
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        else
        {
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        }
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      if (loopCounter3 == 1)
      {
        if( 0 == tmrDNABind_Plate1.SetTimer(intDNAEluteTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #1 for "), intDNAEluteTime, Translate(" seconds"), Translate(""));
      }
      else
      {
        if (loopCounter3 == 2)
        {
          if( 0 == tmrDNABind_Plate2.SetTimer(intDNAEluteTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Started DNA binding timer #2 for "), intDNAEluteTime, Translate(" seconds"), Translate(""));
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("========== Step 10. Bead Pulldown =========="));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> loopCounter3: "), loopCounter3);
      if (loopCounter3 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #1"), Translate(""));
        if( 0 == tmrDNABind_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter3 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for DNA Bind Timer #2"), Translate(""));
          if( 0 == tmrDNABind_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Move to Magnet -----"));
      _GetLabwareParameters(seqTrp_BindOnHHS, arrTransportSettings);
      if (blnEluteOnHHS == 1)
      {
        HSLHamHeaterShaker::StopShaker(arrHHSDevices.ElementAt( loopCounter2 -1));
        HSLHamHeaterShaker::SetPlateLock(arrHHSDevices.ElementAt( loopCounter2 -1), 0);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      if (loopCounter3 == 1)
      {
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #1"), Translate(""));
        if( 0 == tmrDNAPulldown_Plate1.SetTimer(intBeadPulldownTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      else
      {
        if (loopCounter3 == 2)
        {
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Starting DNA Pulldown Timer #2"), Translate(""));
          if( 0 == tmrDNAPulldown_Plate2.SetTimer(intBeadPulldownTime) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("========== Step 11. Recover DNA =========="));
      if (loopCounter3 == 1)
      {
        if( 0 == tmrDNAPulldown_Plate1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Pulldown Timer #1"), Translate(""));
      }
      else
      {
        if (loopCounter3 == 1)
        {
          if( 0 == tmrDNAPulldown_Plate2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Waiting for Bead Pulldown Timer #2"), Translate(""));
        }
        else
        {
        }
      }
      MECC::TraceComment(Translate("----- Pickup Tips -----"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      MECC::TraceComment(Translate("----- Eject Tips -----"));
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      SeqIncrement(seqWashPlate, 96);
      SeqIncrement(seqDWP_BindPlates, 96);
      SeqIncrement(seqDWP_BindOnMagnet, 96);
      SeqIncrement(ML_STAR.PCR_DestinationPlates, 96);
      SeqIncrement(seqTrp_BindPlates, 1);
      SeqIncrement(seqTrp_BindOnMagnet, 1);
    }
  }
}

private function _GetPipelineVariables( variable i_strConfigFilePath, variable i_strPipeline ) void {
  private variable __[];
  private variable strJSONSearch;
  private variable _strJSONPrefix;
  private variable intSimTimer;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Getting Pipeline Varibles: Start"), Translate(""));
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Processing_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnFilteredTips"));
  blnFilteredTips = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intMaxPlateThroughput"));
  intMaxPlateThroughput = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strMagnetType"));
  strMagnetType = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step1_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnTopUp"));
  blnTopUp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (blnTopUp == 1)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUpVolume"));
    intTopUpVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_TopUp"));
    strLC_TopUp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnTopUp_Eject"));
    blnTopUp_Eject = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspLLD"));
    intTopUp_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intTopUp_AspLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspSubmerge"));
      intTopUp_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspHeight"));
      intTopUp_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspRetract"));
      intTopUp_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspFollowing"));
    intTopUp_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspMixCycles"));
    intTopUp_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intTopUp_AspMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_AspMixVolume"));
      intTopUp_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispLLD"));
    intTopUp_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intTopUp_DispLLD != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispSubmerge"));
      intTopUp_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
    else
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispHeight"));
      intTopUp_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispRetract"));
      intTopUp_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    }
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispFollowing"));
    intTopUp_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispMixCycles"));
    intTopUp_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
    if (intTopUp_DispMixCycles != 0)
    {
      strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intTopUp_DispMixVolume"));
      intTopUp_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    }
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step2_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnSourcePlateCleanup"));
  blnSourcePlateCleanup = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBeadVolume"));
  intBeadVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strBeadType"));
  strBeadType = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Bead"));
  strLC_Bead = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBead_Eject"));
  blnBead_Eject = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspLLD"));
  intBead_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intBead_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspSubmerge"));
    intBead_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspHeight"));
    intBead_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspRetract"));
    intBead_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspFollowing"));
  intBead_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspMixCycles"));
  intBead_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intBead_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_AspMixVolume"));
    intBead_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispLLD"));
  intBead_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intBead_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispSubmerge"));
    intBead_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispHeight"));
    intBead_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispRetract"));
    intBead_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispFollowing"));
  intBead_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispMixCycles"));
  intBead_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intBead_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBead_DispMixVolume"));
    intBead_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step3_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAVolume"));
  intDNAVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_DNA"));
  strLC_DNA = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspLLD"));
  intDNA_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intDNA_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspSubmerge"));
    intDNA_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspHeight"));
    intDNA_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspRetract"));
    intDNA_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspFollowing"));
  intDNA_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspMixCycles"));
  intDNA_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intDNA_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_AspMixVolume"));
    intDNA_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispLLD"));
  intDNA_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intDNA_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispSubmerge"));
    intDNA_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispHeight"));
    intDNA_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispRetract"));
    intDNA_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispFollowing"));
  intDNA_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispMixCycles"));
  intDNA_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intDNA_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNA_DispMixVolume"));
    intDNA_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step4_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNABindTime"));
  intDNABindTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBindOnHHS"));
  blnBindOnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (blnBindOnHHS == 1)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBind_Temp"));
    intBind_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBind_Shake"));
    intBind_Shake = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step5_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAPulldownTime"));
  intDNAPulldownTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step6_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSupernatantVolume"));
  intSupernatantVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Sup"));
  strLC_Sup = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnRetainSupernatant"));
  blnRetainSupernatant = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspLLD"));
  intSup_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intSup_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspSubmerge"));
    intSup_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspHeight"));
    intSup_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspRetract"));
    intSup_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspFollowing"));
  intSup_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspMixCycles"));
  intSup_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intSup_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_AspMixVolume"));
    intSup_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispLLD"));
  intSup_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intSup_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispSubmerge"));
    intSup_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispHeight"));
    intSup_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispRetract"));
    intSup_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispFollowing"));
  intSup_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispMixCycles"));
  intSup_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intSup_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intSup_DispMixVolume"));
    intSup_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step7_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnWashOnMagnet"));
  blnWashOnMagnet = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWashCycles"));
  intWashCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEthanolWashVolume"));
  intEthanolWashVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_EtOH"));
  strLC_EtOH = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspLLD"));
  intEtOH_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEtOH_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspSubmerge"));
    intEtOH_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspHeight"));
    intEtOH_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspRetract"));
    intEtOH_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspFollowing"));
  intEtOH_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspMixCycles"));
  intEtOH_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEtOH_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_AspMixVolume"));
    intEtOH_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispLLD"));
  intEtOH_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEtOH_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispSubmerge"));
    intEtOH_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispHeight"));
    intEtOH_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispRetract"));
    intEtOH_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispFollowing"));
  intEtOH_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispMixCycles"));
  intEtOH_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEtOH_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEtOH_DispMixVolume"));
    intEtOH_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEthanolRemovalVoume"));
  intEthanolRemovalVoume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Wash"));
  strLC_Wash = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspLLD"));
  intWash_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intWash_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspSubmerge"));
    intWash_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspHeight"));
    intWash_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspRetract"));
    intWash_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspFollowing"));
  intWash_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspMixCycles"));
  intWash_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intWash_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_AspMixVolume"));
    intWash_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispLLD"));
  intWash_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intWash_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispSubmerge"));
    intWash_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispHeight"));
    intWash_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispRetract"));
    intWash_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispFollowing"));
  intWash_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispMixCycles"));
  intWash_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intWash_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intWash_DispMixVolume"));
    intWash_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step8_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBeadDryingTime"));
  intBeadDryingTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDryOnHHS"));
  blnDryOnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (blnDryOnHHS == 1)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDry_Temp"));
    intDry_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDryOnDeck"));
  blnDryOnDeck = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnDryOnMagnet"));
  blnDryOnMagnet = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step9_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strEluateType"));
  strEluateType = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluateVolume"));
  intEluateVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnEluateOnMagnet"));
  blnEluateOnMagnet = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Eluate"));
  strLC_Eluate = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspLLD"));
  intEluate_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEluate_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspSubmerge"));
    intEluate_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspHeight"));
    intEluate_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspRetract"));
    intEluate_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspFollowing"));
  intEluate_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspMixCycles"));
  intEluate_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEluate_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_AspMixVolume"));
    intEluate_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispLLD"));
  intEluate_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEluate_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispSubmerge"));
    intEluate_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispHeight"));
    intEluate_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispRetract"));
    intEluate_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispFollowing"));
  intEluate_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispMixCycles"));
  intEluate_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intEluate_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intEluate_DispMixVolume"));
    intEluate_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step10_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intDNAEluteTime"));
  intDNAEluteTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnEluteOnHHS"));
  blnEluteOnHHS = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (blnEluteOnHHS == 1)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intElute_Temp"));
    intElute_Temp = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intElute_Shake"));
    intElute_Shake = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step11_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intBeadPulldownTime"));
  intBeadPulldownTime = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnBeadPulldown"));
  blnBeadPulldown = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  _strJSONPrefix = StrConcat2(i_strPipeline, Translate(",Step12_Details,"));
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("blnTipRinse"));
  blnTipRinse = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecoveryVolume"));
  intRecoveryVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("strLC_Recovery"));
  strLC_Recovery = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspLLD"));
  intRecovery_AspLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intRecovery_AspLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspSubmerge"));
    intRecovery_AspSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspHeight"));
    intRecovery_AspHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspRetract"));
    intRecovery_AspRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspFollowing"));
  intRecovery_AspFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspMixCycles"));
  intRecovery_AspMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intRecovery_AspMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_AspMixVolume"));
    intRecovery_AspMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispLLD"));
  intRecovery_DispLLD = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intRecovery_DispLLD != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispSubmerge"));
    intRecovery_DispSubmerge = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  }
  else
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispHeight"));
    intRecovery_DispHeight = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispRetract"));
    intRecovery_DispRetract = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispFollowing"));
  intRecovery_DispFollowing = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispMixCycles"));
  intRecovery_DispMixCycles = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 0, __);
  if (intRecovery_DispMixCycles != 0)
  {
    strJSONSearch = StrConcat2(_strJSONPrefix, Translate("intRecovery_DispMixVolume"));
    intRecovery_DispMixVolume = _GetJSONValue(i_strConfigFilePath, strJSONSearch, 0, 1, __);
  }
  intSimTimer = 10;
  intBeadDryingTime = intSimTimer;
  intBeadPulldownTime = intSimTimer;
  intDNABindTime = intSimTimer;
  intDNAEluteTime = intSimTimer;
  intDNAPulldownTime = intSimTimer;
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Getting Pipeline Varibles: End"), Translate(""));
}

private function B_CreateSequences(  ) void {
  MECC::TraceComment(Translate("**************************************************************************************************************************\n                                                 SEQUENCE CREATION: START\n**************************************************************************************************************************"));
  SeqCopySequence(seqRes_BindingBeads, ML_STAR.res_Beads);
  SeqCopySequence(seqRes_WashBuffer, ML_STAR.res_Ethanol);
  SeqCopySequence(seqTips, ML_STAR.NTR_Tips);
  if (blnSourcePlateCleanup == 1)
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.PCR_SourcePlates);
  }
  else
  {
    SeqCopySequence(seqDWP_BindPlates, ML_STAR.DWP_BindPlates);
  }
  SeqCopySequence(seqPCR_SourcePlates, ML_STAR.PCR_SourcePlates);
  SeqCopySequence(seqTrp_BindPlates, ML_STAR.trp_BindPlates_Home);
  SeqCopySequence(seqTrp_BindOnMagnet, ML_STAR.trp_BindPlates_Magnet);
  SeqCopySequence(seqDWP_BindOnMagnet, ML_STAR.DWP_BindOnMagnet);
  if (blnWashOnMagnet == 1)
  {
    SeqCopySequence(seqWashPlate, ML_STAR.DWP_BindOnMagnet);
  }
  else
  {
    SeqCopySequence(seqWashPlate, seqDWP_BindPlates);
  }
  SeqCopySequence(seqTrp_BindOnHHS, ML_STAR.trp_BindPlates_HHS);
  SeqCopySequence(seqWaste, ML_STAR.res_Waste);
  if (blnRetainSupernatant == 1)
  {
    MECC::TraceComment(Translate("Functionality to retain the supernatant has not yet been added. Method will abort"));
    abort;
  }
  else
  {
    SeqCopySequence(seqSupernatantWaste, ML_STAR.res_Waste);
  }
}

private function _GetJSONValue( variable i_strFilePath, variable i_strSearch, variable i_intTrace, variable i_blnForceCheck, variable & o_arr[] ) variable {
  private variable o_var;
  private variable _varType;
  private variable _intArrSize;
  private variable _blnArray;
  o_arr.SetSize( 0);
  JSONSEARCH::GetJSONEntry(i_strFilePath, i_strSearch, i_intTrace, o_arr, o_var);
  _blnArray = 0;
  _varType = StrGetType(o_var);
  if (_varType == "s")
  {
    if (o_var == "")
    {
      if (i_blnForceCheck == 1)
      {
        _blnArray = 1;
      }
    }
  }
  else
  {
    if (_varType == "i")
    {
      if (o_var == 0)
      {
        if (i_blnForceCheck == 1)
        {
          _blnArray = 1;
        }
      }
    }
    else
    {
      if (_varType == "f")
      {
        if (o_var == 0)
        {
          if (i_blnForceCheck == 1)
          {
            _blnArray = 1;
          }
        }
      }
      else
      {
        _blnArray = 1;
      }
    }
  }
  if (_blnArray == 1)
  {
    _intArrSize=o_arr.GetSize();
    if (_intArrSize == 0)
    {
      TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Issue with strJSONSearch: "), i_strSearch);
      abort;
    }
  }
  return (o_var);
}

private function _GetLabwareParameters( sequence i_seq, variable & o_arr[] ) void {
  private variable _intZSpeed_Get;
  private variable _intGripSpeed;
  private variable _intGripWidthOpen;
  private variable _intZSpeed_Place;
  private variable _intGripForce;
  private variable _intPlatePress;
  private variable _intXAcceleration;
  private variable _intGripWidth;
  private variable _intGripHeight;
  private variable _strLabwareName;
  private variable _strLabwareID;
  private variable _intCutLength;
  private variable _intStrLength;
  private variable _strJSONSearch;
  private variable _strLabwareAlias;
  private variable _strJSONPrefix;
  private variable __[];
  private variable arrAvailablePipelineSteps[];
  o_arr.SetSize( 0);
  o_arr.SetSize(0);
  if(0){
    _intGripHeight = 4;
    _intGripWidth = 79;
    _intGripWidthOpen = 85;
    _intGripForce = 5;
    _intGripSpeed = 277.8;
    _intZSpeed_Get = 128.7;
    _intXAcceleration = 4;
    _intZSpeed_Place = 128.7;
    _intPlatePress = 1;
  }
  _strLabwareID = SeqGetLabwareId(i_seq);
  _intStrLength = StrGetLength(_strLabwareID);
  _intCutLength = _intStrLength - 5;
  _strLabwareName = StrLeft(_strLabwareID, _intCutLength);
  _strJSONSearch = StrConcat2(Translate("LabwareTypes,"), _strLabwareName);
  _strLabwareAlias = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 1, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripHeight"));
  _intGripHeight = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripWidth"));
  _intGripWidth = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripWidthOpen"));
  _intGripWidthOpen = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripForce"));
  _intGripForce = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intGripSpeed"));
  _intGripSpeed = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intZSpeed_Get"));
  _intZSpeed_Get = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intXAcceleration"));
  _intXAcceleration = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strJSONSearch = StrConcat2(_strLabwareAlias, Translate(",intZSpeed_Place"));
  _intZSpeed_Place = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  _strLabwareAlias = StrConcat2(_strLabwareAlias, Translate(",intPlatePress"));
  _intPlatePress = _GetJSONValue(strConfigFilePath, _strJSONSearch, 0, 0, __);
  o_arr.AddAsLast(_intGripHeight);
  o_arr.AddAsLast(_intGripWidth);
  o_arr.AddAsLast(_intGripWidthOpen);
  o_arr.AddAsLast(_intGripForce);
  o_arr.AddAsLast(_intGripSpeed);
  o_arr.AddAsLast(_intZSpeed_Get);
  o_arr.AddAsLast(_intXAcceleration);
  o_arr.AddAsLast(_intZSpeed_Place);
  o_arr.AddAsLast(_intPlatePress);
}
